PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1280, 1024]
  color = $[1,1,1]
  expName = HMT
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text_time
      color = -0.5294, 0.4039, -0.1137
      letterHeight = 30
      startVal [time (s)] = 120
      stopVal [duration (s)] = 120
      text = Ihre Zeit für diese Aufgabe ist abgelaufen! Klicken Sie weiter um fortzufahren ! 
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    ImageComponent Probe
      image [set every repeat] = $Test
      pos = (0, 200)
      size = (300,300)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    MouseComponent mouse_exp
      clickable = Mat1, Mat2, Mat3, Mat4, Mat5, Mat6, Mat7, Mat8
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 120
      timeRelativeTo = routine
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    ImageComponent Mat1
      image [set every repeat] = $Sol1
      pos = (-525, -150)
      size = (100, 100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent Mat2
      image [set every repeat] = $Sol2
      pos = (-375, -150)
      size = (100, 100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent Mat3
      image [set every repeat] = $Sol3
      pos = (-225, -150)
      size = (100, 100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent Mat4
      image [set every repeat] = $Sol4
      pos = (-75, -150)
      size = (100, 100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent Mat5
      image [set every repeat] = $Sol5
      pos = (75, -150)
      size = (100, 100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent Mat6
      image [set every repeat] = $Sol6
      pos = (225, -150)
      size = (100,100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent Mat7
      image [set every repeat] = $Sol7
      pos = (375, -150)
      size = (100, 100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ImageComponent Mat8
      image [set every repeat] = $Sol8
      pos = (525, -150)
      size = (100,100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    PolygonComponent Resp1
      fillColor = none
      lineColor = grey
      lineWidth = 2
      pos = (-525, -150)
      shape = rectangle
      size = (110, 110)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    PolygonComponent Resp2
      fillColor = none
      lineColor = grey
      lineWidth = 2
      pos = (-375, -150)
      shape = rectangle
      size = (110, 110)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    PolygonComponent Resp3
      fillColor = none
      lineColor = grey
      lineWidth = 2
      pos = (-225, -150)
      shape = rectangle
      size = (110, 110)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    PolygonComponent Resp4
      fillColor = none
      lineColor = grey
      lineWidth = 2
      pos = (-75, -150)
      shape = rectangle
      size = (110, 110)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    PolygonComponent Resp5
      fillColor = none
      lineColor = grey
      lineWidth = 2
      pos = (75, -150)
      shape = rectangle
      size = (110, 110)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    PolygonComponent Resp6
      fillColor = none
      lineColor = grey
      lineWidth = 2
      pos = (225, -150)
      shape = rectangle
      size = (110, 110)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    PolygonComponent Resp7
      fillColor = none
      lineColor = grey
      lineWidth = 2
      pos = (375, -150)
      shape = rectangle
      size = (110, 110)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    PolygonComponent Resp8
      fillColor = none
      lineColor = grey
      lineWidth = 2
      pos = (525, -150)
      shape = rectangle
      size = (110, 110)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    CodeComponent Response_Feedback
      Code Type = Auto->JS
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      Begin Routine:
        Resp1.opacity=0
        Resp2.opacity=0
        Resp3.opacity=0
        Resp4.opacity=0
        Resp5.opacity=0
        Resp6.opacity=0
        Resp7.opacity=0
        Resp8.opacity=0
      Each Frame:
        if len(mouse_exp.clicked_name)>0:
         if mouse_exp.isPressedIn(Mat1):
            Resp1.opacity=1
            Resp2.opacity=0
            Resp3.opacity=0
            Resp4.opacity=0
            Resp5.opacity=0
            Resp6.opacity=0
            Resp7.opacity=0
            Resp8.opacity=0
         elif mouse_exp.isPressedIn(Mat2):
            Resp1.opacity=0
            Resp2.opacity=1
            Resp3.opacity=0
            Resp4.opacity=0
            Resp5.opacity=0
            Resp6.opacity=0
            Resp7.opacity=0
            Resp8.opacity=0
         elif mouse_exp.isPressedIn(Mat3):
            Resp1.opacity=0
            Resp2.opacity=0
            Resp3.opacity=1
            Resp4.opacity=0
            Resp5.opacity=0
            Resp6.opacity=0
            Resp7.opacity=0
            Resp8.opacity=0
         elif mouse_exp.isPressedIn(Mat4):
            Resp1.opacity=0
            Resp2.opacity=0
            Resp3.opacity=0
            Resp4.opacity=1
            Resp5.opacity=0
            Resp6.opacity=0
            Resp7.opacity=0
            Resp8.opacity=0
         elif mouse_exp.isPressedIn(Mat5):
            Resp1.opacity=0
            Resp2.opacity=0
            Resp3.opacity=0
            Resp4.opacity=0
            Resp5.opacity=1
            Resp6.opacity=0
            Resp7.opacity=0
            Resp8.opacity=0
         elif mouse_exp.isPressedIn(Mat6):
            Resp1.opacity=0
            Resp2.opacity=0
            Resp3.opacity=0
            Resp4.opacity=0
            Resp5.opacity=0
            Resp6.opacity=1
            Resp7.opacity=0
            Resp8.opacity=0
         elif mouse_exp.isPressedIn(Mat7):
            Resp1.opacity=0
            Resp2.opacity=0
            Resp3.opacity=0
            Resp4.opacity=0
            Resp5.opacity=0
            Resp6.opacity=0
            Resp7.opacity=1
            Resp8.opacity=0
         elif mouse_exp.isPressedIn(Mat8):
            Resp1.opacity=0
            Resp2.opacity=0
            Resp3.opacity=0
            Resp4.opacity=0
            Resp5.opacity=0
            Resp6.opacity=0
            Resp7.opacity=0
            Resp8.opacity=1
    CodeComponent End_trial
      Code Type = Auto->JS
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      Each Frame:
        if len(mouse_exp.clicked_name)>0 and mouse_final.isPressedIn(Next):
            continueRoutine = False
    CodeComponent End_trial_time
      Code Type = Auto->JS
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      Each Frame:
        if mouse_final.isPressedIn(Times_up):
            continueRoutine = False
    MouseComponent mouse_final
      clickable = Next
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [condition] = len(mouse_exp.clicked_name)>0
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    MouseComponent mouse_final_time
      clickable = Times_up
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [condition] = t==120
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    CodeComponent Store_Resp
      Code Type = Auto->JS
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      End Routine:
        if len(mouse_exp.clicked_name)>0 or t == 120:
         if mouse_exp.clicked_name[-1] == CorResp:
            thisExp.addData('correct', '1')
         else:
           thisExp.addData('correct', '0')
    ImageComponent Next
      image = Image/Weiter.png
      pos = (550, -450)
      size = (90, 50)
      startVal [condition] = len(mouse_exp.clicked_name) 
      stopVal [duration (s)] = 120
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    ImageComponent Times_up
      image = Image/Weiter.png
      pos = (0, -100)
      size = (90, 50)
      startVal [time (s)] = 120
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        text_time.alignText = 'center'
  Routine ITI
    PolygonComponent White
      fillColor = white
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine End_Screen
    TextComponent End
      color = black
      letterHeight = 20
      pos = (-50, 0)
      startVal [time (s)] = 0.0
      wrapWidth = 800
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      text:
        Geschafft!

        Diese Teilaufgabe ist nun beendet.
        Bitte melden Sie sich bei der Versuchsleitung
    ImageComponent Logo_End
      image = image/logo.png
      pos = (500, 450)
      size = (100, 100)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Inst3
    MouseComponent Prac_2_next
      clickable = Next_Inst_2
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent Prac2
      image = graphics\HMT(-S) Examples\HMTe_2.png
      pos = (0, -150)
      size = (200, 200)
      startVal [time (s)] = 0.0
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    TextComponent Instruction3
      color = black
      letterHeight = 20
      pos = (0, 200)
      startVal [time (s)] = 0.0
      wrapWidth = 1200
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      text:
        Beispiel 2

        Welches Puzzlestück ergänzt die dargestellte Figurenfolge richtig?
        (Bitte anklicken und anschließend auf "Weiter" klicken.)
    CodeComponent Leftalign_3
      Code Type = Auto->JS
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      Begin Routine:
        Instruction3.alignText = 'left'
    ImageComponent Prac_2_1
      image = graphics\HMT(-S) Examples\HMTe_2_Sol_1.png
      pos = (-525, -350)
      size = (75, 75)
      startVal [time (s)] = 0.0
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    ImageComponent Prac_2_2
      image = graphics\HMT(-S) Examples\HMTe_2_Sol_2.png
      pos = (-375, -350)
      size = (75, 75)
      startVal [time (s)] = 0.0
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    ImageComponent Prac_2_3
      image = graphics\HMT(-S) Examples\HMTe_2_Sol_3.png
      pos = (-225, -350)
      size = (75, 75)
      startVal [time (s)] = 0.0
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    ImageComponent Prac_2_4
      image = graphics\HMT(-S) Examples\HMTe_2_Sol_4.png
      pos = (-75, -350)
      size = (75, 75)
      startVal [time (s)] = 0.0
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    ImageComponent Prac_2_5
      image = graphics\HMT(-S) Examples\HMTe_2_Sol_5.png
      pos = (75, -350)
      size = (75, 75)
      startVal [time (s)] = 0.0
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    ImageComponent Prac_2_6
      image = graphics\HMT(-S) Examples\HMTe_2_Sol_6.png
      pos = (225, -350)
      size = (75, 75)
      startVal [time (s)] = 0.0
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    ImageComponent Prac_2_7
      image = graphics\HMT(-S) Examples\HMTe_2_Sol_7.png
      pos = (375, -350)
      size = (75, 75)
      startVal [time (s)] = 0.0
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    ImageComponent Prac_2_8
      image = graphics\HMT(-S) Examples\HMTe_2_Sol_8.png
      pos = (525, -350)
      size = (75, 75)
      startVal [time (s)] = 0.0
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    PolygonComponent Prac_2_Resp1
      fillColor = none
      lineColor = grey
      lineWidth = 2
      pos = (-525, -350)
      shape = rectangle
      size = (80, 80)
      startVal [time (s)] = 0.0
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    PolygonComponent Prac_2_Resp2
      fillColor = none
      lineColor = grey
      lineWidth = 2
      pos = (-375, -350)
      shape = rectangle
      size = (80, 80)
      startVal [time (s)] = 0.0
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    PolygonComponent Prac_2_Resp3
      fillColor = none
      lineColor = grey
      lineWidth = 2
      pos = (-225, -350)
      shape = rectangle
      size = (80, 80)
      startVal [time (s)] = 0.0
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    PolygonComponent Prac_2_Resp4
      fillColor = none
      lineColor = grey
      lineWidth = 2
      pos = (-75, -350)
      shape = rectangle
      size = (80, 80)
      startVal [time (s)] = 0.0
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    PolygonComponent Prac_2_Resp5
      fillColor = none
      lineColor = grey
      lineWidth = 2
      pos = (75, -350)
      shape = rectangle
      size = (80, 80)
      startVal [time (s)] = 0.0
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    PolygonComponent Prac_2_Resp6
      fillColor = none
      lineColor = grey
      lineWidth = 2
      pos = (225, -350)
      shape = rectangle
      size = (80, 80)
      startVal [time (s)] = 0.0
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    PolygonComponent Prac_2_Resp7
      fillColor = none
      lineColor = grey
      lineWidth = 2
      pos = (375, -350)
      shape = rectangle
      size = (80, 80)
      startVal [time (s)] = 0.0
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    PolygonComponent Prac_2_Resp8
      fillColor = none
      lineColor = grey
      lineWidth = 2
      pos = (525, -350)
      shape = rectangle
      size = (80, 80)
      startVal [time (s)] = 0.0
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    CodeComponent Feedback_Prac1_2
      Code Type = Auto->JS
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      Begin Routine:
        Prac_2_Resp1.opacity=0
        Prac_2_Resp2.opacity=0
        Prac_2_Resp3.opacity=0
        Prac_2_Resp4.opacity=0
        Prac_2_Resp5.opacity=0
        Prac_2_Resp6.opacity=0
        Prac_2_Resp7.opacity=0
        Prac_2_Resp8.opacity=0
      Each Frame:
        if Prac2_resp.isPressedIn(Prac_2_1):
            Prac_2_Resp1.opacity=1
            Prac_2_Resp2.opacity=0
            Prac_2_Resp3.opacity=0
            Prac_2_Resp4.opacity=0
            Prac_2_Resp5.opacity=0
            Prac_2_Resp6.opacity=0
            Prac_2_Resp7.opacity=0
            Prac_2_Resp8.opacity=0
        elif Prac2_resp.isPressedIn(Prac_2_2):
            Prac_2_Resp1.opacity=0
            Prac_2_Resp2.opacity=1
            Prac_2_Resp3.opacity=0
            Prac_2_Resp4.opacity=0
            Prac_2_Resp5.opacity=0
            Prac_2_Resp6.opacity=0
            Prac_2_Resp7.opacity=0
            Prac_2_Resp8.opacity=0
        elif Prac2_resp.isPressedIn(Prac_2_3):
            Prac_2_Resp1.opacity=0
            Prac_2_Resp2.opacity=0
            Prac_2_Resp3.opacity=1
            Prac_2_Resp4.opacity=0
            Prac_2_Resp5.opacity=0
            Prac_2_Resp6.opacity=0
            Prac_2_Resp7.opacity=0
            Prac_2_Resp8.opacity=0
        elif Prac2_resp.isPressedIn(Prac_2_4):
            Prac_2_Resp1.opacity=0
            Prac_2_Resp2.opacity=0
            Prac_2_Resp3.opacity=0
            Prac_2_Resp4.opacity=1
            Prac_2_Resp5.opacity=0
            Prac_2_Resp6.opacity=0
            Prac_2_Resp7.opacity=0
            Prac_2_Resp8.opacity=0
        elif Prac2_resp.isPressedIn(Prac_2_5):
            Prac_2_Resp1.opacity=0
            Prac_2_Resp2.opacity=0
            Prac_2_Resp3.opacity=0
            Prac_2_Resp4.opacity=0
            Prac_2_Resp5.opacity=1
            Prac_2_Resp6.opacity=0
            Prac_2_Resp7.opacity=0
            Prac_2_Resp8.opacity=0
        elif Prac2_resp.isPressedIn(Prac_2_6):
            Prac_2_Resp1.opacity=0
            Prac_2_Resp2.opacity=0
            Prac_2_Resp3.opacity=0
            Prac_2_Resp4.opacity=0
            Prac_2_Resp5.opacity=0
            Prac_2_Resp6.opacity=1
            Prac_2_Resp7.opacity=0
            Prac_2_Resp8.opacity=0
        elif Prac2_resp.isPressedIn(Prac_2_7):
            Prac_2_Resp1.opacity=0
            Prac_2_Resp2.opacity=0
            Prac_2_Resp3.opacity=0
            Prac_2_Resp4.opacity=0
            Prac_2_Resp5.opacity=0
            Prac_2_Resp6.opacity=0
            Prac_2_Resp7.opacity=1
            Prac_2_Resp8.opacity=0
        elif Prac2_resp.isPressedIn(Prac_2_8):
            Prac_2_Resp1.opacity=0
            Prac_2_Resp2.opacity=0
            Prac_2_Resp3.opacity=0
            Prac_2_Resp4.opacity=0
            Prac_2_Resp5.opacity=0
            Prac_2_Resp6.opacity=0
            Prac_2_Resp7.opacity=0
            Prac_2_Resp8.opacity=1
    ImageComponent Logo_3
      image = image/logo.png
      pos = (500, 450)
      size = (200, 60)
      startVal [time (s)] = 0.0
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    MouseComponent Prac2_resp
      clickable = Prac_2_1, Prac_2_2, Prac_2_3, Prac_2_4, Prac_2_5, Prac_2_6, Prac_2_7, Prac_2_8
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    ImageComponent Next_Inst_2
      image = image/Weiter.png
      opacity = 0
      pos = (550, -450)
      size = (90, 50)
      startVal [time (s)] = 0
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    CodeComponent Fix
      Code Type = Auto->JS
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      Begin Routine:
        Next_Inst_2.opacity = 0
      Each Frame:
        if any(Prac2_resp.getPressed()):
            Next_Inst_2.opacity =1
  Routine Start
    TextComponent Start_text
      color = black
      letterHeight = 20
      pos = (-50, 200)
      startVal [time (s)] = 0.0
      wrapWidth = 1000
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      text:
        Es folgen nun 20 Aufgaben.

        Markieren Sie die nach Ihrer Meinung richtige Lösung und klicken Sie auf den "Weiter“. Für jede Aufgabe haben Sie 2:00 Minuten Zeit zur Beantwortung. Nach dieser Zeit wird automatisch die nächste Aufgabe gezeigt.

        Viel Erfolg!
    CodeComponent left_align
      Code Type = Auto->JS
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      Begin Experiment:
        Start_text.alignText = 'left'
    MouseComponent mouse_start
      clickable = Start_Button
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent Start_Button
      image = image/Weiter.png
      pos = (550, -450)
      size = [90,50]
      startVal [time (s)] = 0.0
      texture resolution = 512
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    ImageComponent Logo_5
      image = image/logo.png
      pos = (500, 450)
      size = (100, 100)
      startVal [time (s)] = 0.0
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  Routine Instruction4
    MouseComponent mouse_Inst2_2
      clickable = Next_Inst_3
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent Prac1_4
      image = graphics\HMT(-S) Examples\HMTe_2.png
      pos = (0, -150)
      size = (200, 200)
      startVal [time (s)] = 0.0
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    TextComponent Instruction1_4
      color = black
      letterHeight = 20
      pos = (0, 200)
      startVal [time (s)] = 0.0
      wrapWidth = 1200
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      text:
        Beispiel 2

        Lösung:

        Das 6. Puzzlestück ist die einzige richtige Lösung.

        Bei dieser Aufgabe muss man in jeder zeile eine Subtraktion durchführen. Die Elemente, die an zweiter Stelle stehen, werden jeweils von den Elementen der ersten Spalte abgezogen. In der Dritten Spalte müssen somit die Elemente vorhanden sein, die sich in der ersten Spalte befinden, in der zweiten jedoch nicht. Der quadratische Rahmen ist von der Subtraktion ausgenommen und wird beibehalten.

        Bitte klicken Sie auf "Weiter", um zur ersten Aufgabe zu gelangen.
    CodeComponent Leftalign_4
      Code Type = Auto->JS
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      Begin Routine:
        Instruction1_4.alignText = 'left'
    ImageComponent Prac_2
      image = graphics\HMT(-S) Examples\HMTe_2_Sol_1.png
      pos = (-525, -350)
      size = (75, 75)
      startVal [time (s)] = 0.0
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    ImageComponent Prac_2_9
      image = graphics\HMT(-S) Examples\HMTe_2_Sol_2.png
      pos = (-375, -350)
      size = (75, 75)
      startVal [time (s)] = 0.0
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    ImageComponent Prac_2_10
      image = graphics\HMT(-S) Examples\HMTe_2_Sol_3.png
      pos = (-225, -350)
      size = (75, 75)
      startVal [time (s)] = 0.0
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    ImageComponent Prac_2_11
      image = graphics\HMT(-S) Examples\HMTe_2_Sol_4.png
      pos = (-75, -350)
      size = (75, 75)
      startVal [time (s)] = 0.0
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    ImageComponent Prac_2_12
      image = graphics\HMT(-S) Examples\HMTe_2_Sol_5.png
      pos = (75, -350)
      size = (75, 75)
      startVal [time (s)] = 0.0
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    ImageComponent Prac_2_13
      image = graphics\HMT(-S) Examples\HMTe_2_Sol_6.png
      pos = (225, -350)
      size = (75, 75)
      startVal [time (s)] = 0.0
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    ImageComponent Prac_2_14
      image = graphics\HMT(-S) Examples\HMTe_2_Sol_7.png
      pos = (375, -350)
      size = (75, 75)
      startVal [time (s)] = 0.0
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    ImageComponent Prac_2_15
      image = graphics\HMT(-S) Examples\HMTe_2_Sol_8.png
      pos = (525, -350)
      size = (75, 75)
      startVal [time (s)] = 0.0
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    PolygonComponent Prac_2_Resp6_2
      fillColor = none
      lineColor = green
      lineWidth = 2
      pos = (225, -350)
      shape = rectangle
      size = (80, 80)
      startVal [time (s)] = 0.0
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    ImageComponent Logo_4
      image = image/logo.png
      pos = (500, 450)
      size = (100, 100)
      startVal [time (s)] = 0.0
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    ImageComponent Next_Inst_3
      image = Image/Weiter.png
      pos = (550, -450)
      size = (90, 50)
      startVal [time (s)] = 2
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  Routine Instruction1
    ImageComponent Probe_2
      image = graphics\HMT(-S) Examples\HMTe_1.png
      pos = (0, -150)
      size = (200,200)
      startVal [time (s)] = 0.0
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    MouseComponent Prac1
      clickable = Mat1_2, Mat2_2, Mat3_2, Mat4_2, Mat5_2, Mat6_2, Mat7_2, Mat8_2
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.1
      timeRelativeTo = routine
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    ImageComponent Mat1_2
      image = graphics\HMT(-S) Examples\HMTe_1_Sol_1.png
      pos = (-525, -350)
      size = (75, 75)
      startVal [time (s)] = 0.0
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    ImageComponent Mat2_2
      image = graphics\HMT(-S) Examples\HMTe_1_Sol_2.png
      pos = (-375, -350)
      size = (75, 75)
      startVal [time (s)] = 0.0
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    ImageComponent Mat3_2
      image = graphics\HMT(-S) Examples\HMTe_1_Sol_3.png
      pos = (-225, -350)
      size = (75,75)
      startVal [time (s)] = 0.0
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    ImageComponent Mat4_2
      image = graphics\HMT(-S) Examples\HMTe_1_Sol_4.png
      pos = (-75, -350)
      size = (75, 75)
      startVal [time (s)] = 0.0
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    ImageComponent Mat5_2
      image = graphics\HMT(-S) Examples\HMTe_1_Sol_5.png
      pos = (75, -350)
      size = (75, 75)
      startVal [time (s)] = 0.0
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    ImageComponent Mat6_2
      image = graphics\HMT(-S) Examples\HMTe_1_Sol_6.png
      pos = (225, -350)
      size = (75,75)
      startVal [time (s)] = 0.0
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    ImageComponent Mat7_2
      image = graphics\HMT(-S) Examples\HMTe_1_Sol_7.png
      pos = (375, -350)
      size = (75,75)
      startVal [time (s)] = 0.0
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    ImageComponent Mat8_2
      image = graphics\HMT(-S) Examples\HMTe_1_Sol_8.png
      pos = (525, -350)
      size = (75,75)
      startVal [time (s)] = 0.0
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    PolygonComponent Resp1_2
      fillColor = none
      lineColor = grey
      lineWidth = 2
      pos = (-525, -350)
      shape = rectangle
      size = (80, 80)
      startVal [time (s)] = 0.0
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    PolygonComponent Resp2_2
      fillColor = none
      lineColor = grey
      lineWidth = 2
      pos = (-375, -350)
      shape = rectangle
      size = (80, 80)
      startVal [time (s)] = 0.0
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    PolygonComponent Resp3_2
      fillColor = none
      lineColor = grey
      lineWidth = 2
      pos = (-225, -350)
      shape = rectangle
      size = (80, 80)
      startVal [time (s)] = 0.0
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    PolygonComponent Resp4_2
      fillColor = none
      lineColor = grey
      lineWidth = 2
      pos = (-75, -350)
      shape = rectangle
      size = (80, 80)
      startVal [time (s)] = 0.0
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    PolygonComponent Resp5_2
      fillColor = none
      lineColor = grey
      lineWidth = 2
      pos = (75, -350)
      shape = rectangle
      size = (80, 80)
      startVal [time (s)] = 0.0
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    PolygonComponent Resp6_2
      fillColor = none
      lineColor = grey
      lineWidth = 2
      pos = (225, -350)
      shape = rectangle
      size = (80, 80)
      startVal [time (s)] = 0.0
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    PolygonComponent Resp7_2
      fillColor = none
      lineColor = grey
      lineWidth = 2
      pos = (375, -350)
      shape = rectangle
      size = (80, 80)
      startVal [time (s)] = 0.0
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    PolygonComponent Resp8_2
      fillColor = none
      lineColor = grey
      lineWidth = 2
      pos = (525, -350)
      shape = rectangle
      size = (80, 80)
      startVal [time (s)] = 0.0
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    CodeComponent Response_Feedback_2
      Code Type = Auto->JS
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      Begin Routine:
        Resp1_2.opacity=0
        Resp2_2.opacity=0
        Resp3_2.opacity=0
        Resp4_2.opacity=0
        Resp5_2.opacity=0
        Resp6_2.opacity=0
        Resp7_2.opacity=0
        Resp8_2.opacity=0
      Each Frame:
        if len(Prac1.clicked_name)>0:
         if Prac1.isPressedIn(Mat1_2):
            Resp1_2.opacity=1
            Resp2_2.opacity=0
            Resp3_2.opacity=0
            Resp4_2.opacity=0
            Resp5_2.opacity=0
            Resp6_2.opacity=0
            Resp7_2.opacity=0
            Resp8_2.opacity=0
         elif Prac1.isPressedIn(Mat2_2):
            Resp1_2.opacity=0
            Resp2_2.opacity=1
            Resp3_2.opacity=0
            Resp4_2.opacity=0
            Resp5_2.opacity=0
            Resp6_2.opacity=0
            Resp7_2.opacity=0
            Resp8_2.opacity=0
         elif Prac1.isPressedIn(Mat3_2):
            Resp1_2.opacity=0
            Resp2_2.opacity=0
            Resp3_2.opacity=1
            Resp4_2.opacity=0
            Resp5_2.opacity=0
            Resp6_2.opacity=0
            Resp7_2.opacity=0
            Resp8_2.opacity=0
         elif Prac1.isPressedIn(Mat4_2):
            Resp1_2.opacity=0
            Resp2_2.opacity=0
            Resp3_2.opacity=0
            Resp4_2.opacity=1
            Resp5_2.opacity=0
            Resp6_2.opacity=0
            Resp7_2.opacity=0
            Resp8_2.opacity=0
         elif Prac1.isPressedIn(Mat5_2):
            Resp1_2.opacity=0
            Resp2_2.opacity=0
            Resp3_2.opacity=0
            Resp4_2.opacity=0
            Resp5_2.opacity=1
            Resp6_2.opacity=0
            Resp7_2.opacity=0
            Resp8_2.opacity=0
         elif Prac1.isPressedIn(Mat6_2):
            Resp1_2.opacity=0
            Resp2_2.opacity=0
            Resp3_2.opacity=0
            Resp4_2.opacity=0
            Resp5_2.opacity=0
            Resp6_2.opacity=1
            Resp7_2.opacity=0
            Resp8_2.opacity=0
         elif Prac1.isPressedIn(Mat7_2):
            Resp1_2.opacity=0
            Resp2_2.opacity=0
            Resp3_2.opacity=0
            Resp4_2.opacity=0
            Resp5_2.opacity=0
            Resp6_2.opacity=0
            Resp7_2.opacity=1
            Resp8_2.opacity=0
         elif Prac1.isPressedIn(Mat8_2):
            Resp1_2.opacity=0
            Resp2_2.opacity=0
            Resp3_2.opacity=0
            Resp4_2.opacity=0
            Resp5_2.opacity=0
            Resp6_2.opacity=0
            Resp7_2.opacity=0
            Resp8_2.opacity=1
    CodeComponent End_trial_2
      Code Type = Auto->JS
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      Each Frame:
        if mouse_final_2.isPressedIn(Next_2):
            continueRoutine = False
    MouseComponent mouse_final_2
      clickable = Next_2
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    TextComponent Text
      color = black
      letterHeight = 20
      pos = (0, 200)
      startVal [time (s)] = 0.0
      wrapWidth = 1200
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      text:
        Liebe/r Teilnehmer/in,

        bei dem folgenden Test geht es darum, Regeln in abstrakten Mustern zu erkennen und sie logisch richtig fortzusetzen. Bei jeder Aufgabe ist ein unvollständiges Puzzle zu sehen. Die dargestellten Muster folgen dabei Regeln, die per Spalte, per Zeile und in der Diagonale gelten können. Sie können sich auf die ganze Figur oder nur auf Teile beziehen. Sie können Hinzufügungen (Addition) oder Wegnahmen (Subtraktion) sowie die Ausrichtung von Figuren oder Einzelkomponenten zum Inhalt haben. Wichtig ist, verschiedene Regeln gleichzeitig zu berücksichtigen. Neu eins der acht Teile ergänzt die auf dem Puzzle abgebildete Figurenfolge richtig.

        Ihre Aufgabe besteht darin, das Puzzlestück auszuwählen, das die Figur richtig ergänzt.
        Für die Bearbeitung der Aufgaben haben Sie jeweils 2:00 Minuten Zeit.

        Beispiel 1:
        Welches Puzzlestück ergänzt die dargestellte Figurenfolge richtig?
        (Bitte anklicken und anschließend auf "Weiter" klicken.)
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        Text.alignText = 'left'
    ImageComponent Next_2
      image = Image/Weiter.png
      pos = (550, -450)
      size = (90, 50)
      startVal [condition] = len(Prac1.clicked_name)>0
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    ImageComponent Logo
      image = image/logo.png
      pos = (500, 450)
      size = (100, 100)
      startVal [time (s)] = 0.0
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  Routine Instruction2
    TextComponent Instruction1_2
      color = black
      letterHeight = 20
      pos = (0, 200)
      startVal [time (s)] = 0.0
      wrapWidth = 1200
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      text:
        Beispiel 1

        Lösung:

        Das 1. Puzzlestück ist die einzige richtige Lösung.

        Bei dieser Aufgabe besteht die eine Regel darin, dass die gestrichelten Linien in der Diagonalen immer ein X abbilden, in den anderen Feldern ein Kreuz. Aslo muss das fehlende Stück ein gestricheltes X haben. Die andere Regel besteht darin, dass die Lage des schwarzen Vierecks systematisch variiert wird: Pro Zelle und pro Spalte "wandert" das schwarze Viereck im Uhrzeigersinn. Deshalb muss es bei dem ergänzenden Stück unten in der Mitte sein.

        Bitte klicken Sie auf "Weiter", um zur nächsten Beispielaufgabe zu gelangen.
    CodeComponent Leftalign_2
      Code Type = Auto->JS
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      Begin Routine:
        Instruction1_2.alignText = 'left'
    MouseComponent mouse_Prac_1_sol
      clickable = Next_Inst_sol
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent Prac_1
      image = graphics\HMT(-S) Examples\HMTe_1_Sol_1.png
      pos = (-525, -350)
      size = (75, 75)
      startVal [time (s)] = 0.0
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    ImageComponent Prac_1_9
      image = graphics\HMT(-S) Examples\HMTe_1_Sol_2.png
      pos = (-375, -350)
      size = (75, 75)
      startVal [time (s)] = 0.0
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    ImageComponent Prac_1_10
      image = graphics\HMT(-S) Examples\HMTe_1_Sol_3.png
      pos = (-225, -350)
      size = (75, 75)
      startVal [time (s)] = 0.0
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    ImageComponent Prac_1_11
      image = graphics\HMT(-S) Examples\HMTe_1_Sol_4.png
      pos = (-75, -350)
      size = (75, 75)
      startVal [time (s)] = 0.0
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    ImageComponent Prac_1_12
      image = graphics\HMT(-S) Examples\HMTe_1_Sol_5.png
      pos = (75, -350)
      size = (75, 75)
      startVal [time (s)] = 0.0
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    ImageComponent Prac_1_13
      image = graphics\HMT(-S) Examples\HMTe_1_Sol_6.png
      pos = (225, -350)
      size = (75, 75)
      startVal [time (s)] = 0.0
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    ImageComponent Prac_1_14
      image = graphics\HMT(-S) Examples\HMTe_1_Sol_7.png
      pos = (375, -350)
      size = (75, 75)
      startVal [time (s)] = 0.0
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    ImageComponent Prac_1_15
      image = graphics\HMT(-S) Examples\HMTe_1_Sol_8.png
      pos = (525, -350)
      size = (75, 75)
      startVal [time (s)] = 0.0
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    ImageComponent Prac1_2
      image = graphics\HMT(-S) Examples\HMTe_1.png
      pos = (0, -150)
      size = (200, 200)
      startVal [time (s)] = 0.0
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    PolygonComponent Prac_1_Resp1_2
      fillColor = none
      lineColor = green
      lineWidth = 2
      pos = (-525, -350)
      shape = rectangle
      size = (80, 80)
      startVal [time (s)] = 0.0
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    ImageComponent Logo_2
      image = image/logo.png
      pos = (500, 450)
      size = (100, 100)
      startVal [time (s)] = 0.0
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    ImageComponent Next_Inst_sol
      image = image/Weiter.png
      pos = (550, -450)
      size = (90, 50)
      startVal [time (s)] = 0
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  Routine Instruction3_2
    ImageComponent Probe_3
      image = graphics\HMT(-S) Examples\HMTe_2.png
      pos = (0, -150)
      size = (200,200)
      startVal [time (s)] = 0.0
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    MouseComponent Prac1_3
      clickable = Mat1_3, Mat2_3, Mat3_3, Mat4_3, Mat5_3, Mat6_3, Mat7_3, Mat8_3
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.1
      timeRelativeTo = routine
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    ImageComponent Mat1_3
      image = graphics\HMT(-S) Examples\HMTe_2_Sol_1.png
      pos = (-525, -350)
      size = (75, 75)
      startVal [time (s)] = 0.0
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    ImageComponent Mat2_3
      image = graphics\HMT(-S) Examples\HMTe_2_Sol_2.png
      pos = (-375, -350)
      size = (75, 75)
      startVal [time (s)] = 0.0
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    ImageComponent Mat3_3
      image = graphics\HMT(-S) Examples\HMTe_2_Sol_3.png
      pos = (-225, -350)
      size = (75,75)
      startVal [time (s)] = 0.0
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    ImageComponent Mat4_3
      image = graphics\HMT(-S) Examples\HMTe_2_Sol_4.png
      pos = (-75, -350)
      size = (75, 75)
      startVal [time (s)] = 0.0
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    ImageComponent Mat5_3
      image = graphics\HMT(-S) Examples\HMTe_2_Sol_5.png
      pos = (75, -350)
      size = (75, 75)
      startVal [time (s)] = 0.0
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    ImageComponent Mat6_3
      image = graphics\HMT(-S) Examples\HMTe_2_Sol_6.png
      pos = (225, -350)
      size = (75,75)
      startVal [time (s)] = 0.0
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    ImageComponent Mat7_3
      image = graphics\HMT(-S) Examples\HMTe_2_Sol_7.png
      pos = (375, -350)
      size = (75,75)
      startVal [time (s)] = 0.0
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    ImageComponent Mat8_3
      image = graphics\HMT(-S) Examples\HMTe_2_Sol_8.png
      pos = (525, -350)
      size = (75,75)
      startVal [time (s)] = 0.0
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    PolygonComponent Resp1_3
      fillColor = none
      lineColor = grey
      lineWidth = 2
      pos = (-525, -350)
      shape = rectangle
      size = (80, 80)
      startVal [time (s)] = 0.0
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    PolygonComponent Resp2_3
      fillColor = none
      lineColor = grey
      lineWidth = 2
      pos = (-375, -350)
      shape = rectangle
      size = (80, 80)
      startVal [time (s)] = 0.0
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    PolygonComponent Resp3_3
      fillColor = none
      lineColor = grey
      lineWidth = 2
      pos = (-225, -350)
      shape = rectangle
      size = (80, 80)
      startVal [time (s)] = 0.0
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    PolygonComponent Resp4_3
      fillColor = none
      lineColor = grey
      lineWidth = 2
      pos = (-75, -350)
      shape = rectangle
      size = (80, 80)
      startVal [time (s)] = 0.0
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    PolygonComponent Resp5_3
      fillColor = none
      lineColor = grey
      lineWidth = 2
      pos = (75, -350)
      shape = rectangle
      size = (80, 80)
      startVal [time (s)] = 0.0
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    PolygonComponent Resp6_3
      fillColor = none
      lineColor = grey
      lineWidth = 2
      pos = (225, -350)
      shape = rectangle
      size = (80, 80)
      startVal [time (s)] = 0.0
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    PolygonComponent Resp7_3
      fillColor = none
      lineColor = grey
      lineWidth = 2
      pos = (375, -350)
      shape = rectangle
      size = (80, 80)
      startVal [time (s)] = 0.0
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    PolygonComponent Resp8_3
      fillColor = none
      lineColor = grey
      lineWidth = 2
      pos = (525, -350)
      shape = rectangle
      size = (80, 80)
      startVal [time (s)] = 0.0
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    CodeComponent Response_Feedback_3
      Code Type = Auto->JS
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      Begin Routine:
        Resp1_3.opacity=0
        Resp2_3.opacity=0
        Resp3_3.opacity=0
        Resp4_3.opacity=0
        Resp5_3.opacity=0
        Resp6_3.opacity=0
        Resp7_3.opacity=0
        Resp8_3.opacity=0
      Each Frame:
        if len(Prac1_3.clicked_name)>0:
         if Prac1_3.isPressedIn(Mat1_3):
            Resp1_3.opacity=1
            Resp2_3.opacity=0
            Resp3_3.opacity=0
            Resp4_3.opacity=0
            Resp5_3.opacity=0
            Resp6_3.opacity=0
            Resp7_3.opacity=0
            Resp8_3.opacity=0
         elif Prac1_3.isPressedIn(Mat2_3):
            Resp1_3.opacity=0
            Resp2_3.opacity=1
            Resp3_3.opacity=0
            Resp4_3.opacity=0
            Resp5_3.opacity=0
            Resp6_3.opacity=0
            Resp7_3.opacity=0
            Resp8_3.opacity=0
         elif Prac1_3.isPressedIn(Mat3_3):
            Resp1_3.opacity=0
            Resp2_3.opacity=0
            Resp3_3.opacity=1
            Resp4_3.opacity=0
            Resp5_3.opacity=0
            Resp6_3.opacity=0
            Resp7_3.opacity=0
            Resp8_3.opacity=0
         elif Prac1_3.isPressedIn(Mat4_3):
            Resp1_3.opacity=0
            Resp2_3.opacity=0
            Resp3_3.opacity=0
            Resp4_3.opacity=1
            Resp5_3.opacity=0
            Resp6_3.opacity=0
            Resp7_3.opacity=0
            Resp8_3.opacity=0
         elif Prac1_3.isPressedIn(Mat5_3):
            Resp1_3.opacity=0
            Resp2_3.opacity=0
            Resp3_3.opacity=0
            Resp4_3.opacity=0
            Resp5_3.opacity=1
            Resp6_3.opacity=0
            Resp7_3.opacity=0
            Resp8_3.opacity=0
         elif Prac1_3.isPressedIn(Mat6_3):
            Resp1_3.opacity=0
            Resp2_3.opacity=0
            Resp3_3.opacity=0
            Resp4_3.opacity=0
            Resp5_3.opacity=0
            Resp6_3.opacity=1
            Resp7_3.opacity=0
            Resp8_3.opacity=0
         elif Prac1_3.isPressedIn(Mat7_3):
            Resp1_3.opacity=0
            Resp2_3.opacity=0
            Resp3_3.opacity=0
            Resp4_3.opacity=0
            Resp5_3.opacity=0
            Resp6_3.opacity=0
            Resp7_3.opacity=1
            Resp8_3.opacity=0
         elif Prac1_3.isPressedIn(Mat8_3):
            Resp1_3.opacity=0
            Resp2_3.opacity=0
            Resp3_3.opacity=0
            Resp4_3.opacity=0
            Resp5_3.opacity=0
            Resp6_3.opacity=0
            Resp7_3.opacity=0
            Resp8_3.opacity=1
    CodeComponent End_trial_3
      Code Type = Auto->JS
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      Each Frame:
        if mouse_final_3.isPressedIn(Next_3):
            continueRoutine = False
    MouseComponent mouse_final_3
      clickable = Next_3
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    TextComponent Text_2
      color = black
      letterHeight = 20
      pos = (0, 200)
      startVal [time (s)] = 0.0
      wrapWidth = 1200
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      text:
        Beispiel 2

        Welches Puzzlestück ergänzt die dargestellte Figurenfolge richtig?
        (Bitte anklicken und anschließend auf "Weiter" klicken.)
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        Text_2.alignText = 'left'
    ImageComponent Next_3
      image = Image/Weiter.png
      pos = (550, -450)
      size = (90, 50)
      startVal [condition] = len(Prac1.clicked_name)>0
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    ImageComponent Logo_7
      image = image/logo.png
      pos = (500, 450)
      size = (100, 100)
      startVal [time (s)] = 0.0
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Flow
  Routine Instruction1
  Routine Instruction2
  Routine ITI
  Routine Instruction3_2
  Routine Instruction4
  Routine Start
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Items.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Test', 'graphics/HMT(-S) Matrices/HMT_01.png'), ('Sol1', 'graphics/HMT(-S) Matrices/HMT_01_Sol_1.png'), ('Sol2', 'graphics/HMT(-S) Matrices/HMT_01_Sol_2.png'), ('Sol3', 'graphics/HMT(-S) Matrices/HMT_01_Sol_3.png'), ('Sol4', 'graphics/HMT(-S) Matrices/HMT_01_Sol_4.png'), ('Sol5', 'graphics/HMT(-S) Matrices/HMT_01_Sol_5.png'), ('Sol6', 'graphics/HMT(-S) Matrices/HMT_01_Sol_6.png'), ('Sol7', 'graphics/HMT(-S) Matrices/HMT_01_Sol_7.png'), ('Sol8', 'graphics/HMT(-S) Matrices/HMT_01_Sol_8.png')]),
      OrderedDict([('Test', 'graphics/HMT(-S) Matrices/HMT_02.png'), ('Sol1', 'graphics/HMT(-S) Matrices/HMT_02_Sol_1.png'), ('Sol2', 'graphics/HMT(-S) Matrices/HMT_02_Sol_2.png'), ('Sol3', 'graphics/HMT(-S) Matrices/HMT_02_Sol_3.png'), ('Sol4', 'graphics/HMT(-S) Matrices/HMT_02_Sol_4.png'), ('Sol5', 'graphics/HMT(-S) Matrices/HMT_02_Sol_5.png'), ('Sol6', 'graphics/HMT(-S) Matrices/HMT_02_Sol_6.png'), ('Sol7', 'graphics/HMT(-S) Matrices/HMT_02_Sol_7.png'), ('Sol8', 'graphics/HMT(-S) Matrices/HMT_02_Sol_8.png')]),
      OrderedDict([('Test', 'graphics/HMT(-S) Matrices/HMT_03.png'), ('Sol1', 'graphics/HMT(-S) Matrices/HMT_03_Sol_1.png'), ('Sol2', 'graphics/HMT(-S) Matrices/HMT_03_Sol_2.png'), ('Sol3', 'graphics/HMT(-S) Matrices/HMT_03_Sol_3.png'), ('Sol4', 'graphics/HMT(-S) Matrices/HMT_03_Sol_4.png'), ('Sol5', 'graphics/HMT(-S) Matrices/HMT_03_Sol_5.png'), ('Sol6', 'graphics/HMT(-S) Matrices/HMT_03_Sol_6.png'), ('Sol7', 'graphics/HMT(-S) Matrices/HMT_03_Sol_7.png'), ('Sol8', 'graphics/HMT(-S) Matrices/HMT_03_Sol_8.png')]),
      OrderedDict([('Test', 'graphics/HMT(-S) Matrices/HMT_04.png'), ('Sol1', 'graphics/HMT(-S) Matrices/HMT_04_Sol_1.png'), ('Sol2', 'graphics/HMT(-S) Matrices/HMT_04_Sol_2.png'), ('Sol3', 'graphics/HMT(-S) Matrices/HMT_04_Sol_3.png'), ('Sol4', 'graphics/HMT(-S) Matrices/HMT_04_Sol_4.png'), ('Sol5', 'graphics/HMT(-S) Matrices/HMT_04_Sol_5.png'), ('Sol6', 'graphics/HMT(-S) Matrices/HMT_04_Sol_6.png'), ('Sol7', 'graphics/HMT(-S) Matrices/HMT_04_Sol_7.png'), ('Sol8', 'graphics/HMT(-S) Matrices/HMT_04_Sol_8.png')])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
    Routine ITI
    Routine trial
  LoopTerminator trials
  Routine End_Screen
